CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Media>.*)_(?P<Left>.*)-(?P<Right>.*)_(?P<Rep>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the color image by matching files in the folder against the text '6-1.jpg'. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf."]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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:BSP14
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the color image into the individual RGB channels, giving each a unique name.']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
    Select the input image:BSP14
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
CorrectIlluminationCalculate:[module_num:6|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notes:["Correct for uneven illumination by creating an illumination correction function. Since most of the image is background, we use the 'Background' method here. The idea is to smooth the function enough so that it reflects the uneven intensity variation."]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
    Select the input image:OrigRed
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Do the same for the blue channel.']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
    Select the input image:OrigBlue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['Do the same for the green channel.']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
    Select the input image:OrigGreen
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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notes:['Apply the illumination function previously created to correct the original image. ']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
    Select the input image:OrigRed
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract
    Select the input image:OrigBlue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:OrigGreen
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract

ImageMath:[module_num:10|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notes:['Combine the corrected blue and green images into one image.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:0.5
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedImage
    Image or measurement?:Image
    Select the first image:CorrRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrBlue
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CorrGreen
    Multiply the third image by:1.0
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
Resize:[module_num:11|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notes:['Shrink the image to a more manageable size.']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
    Select the input image:CombinedImage
    Name the output image:Resized_BSP14
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bicubic
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    Additional image count:0

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify all colonies on the plate. Use the green channel image, since both red and white colonies are bright in this image. Adjust the min/max diameter depending on the expected colony size.']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
    Select the input image:Resized_BSP14
    Name the primary objects to be identified:Colonies
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:ColonyOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EditObjectsManually:[module_num:13|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
    Select the objects to be edited:Colonies
    Name the edited objects:EditedObjects
    Retain outlines of the edited objects?:Yes
    Name the outline image:EditedObjectOutlines
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Resized_BSP14
    Allow overlapping objects?:No

MeasureObjectSizeShape:[module_num:14|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notes:['Measure area and shape features of each colony.']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
    Select objects to measure:EditedObjects
    Calculate the Zernike features?:No

ClassifyObjects:[module_num:15|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notes:['Classify each colony for the desired parameters.First, based on area in a histogram with three bins to distinguish tiny, small, and large colonies. Second, by intensity  into two bins, for distinguishing white and red colonies.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:EditedObjects
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:5
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,5,75,1300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Smallest,Small,Medium,Big,Biggest
    Retain an image of the classified objects?:No
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    Select the object name:Colonies
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the classified objects?:No
    Enter the image name:ClassifiedNuclei

OverlayOutlines:[module_num:16|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notes:['Overlay the colony outlines upon the MaskedRedPlate image. My version throws an error if the outline width >1 (Matt, Jan16)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Resized_BSP14
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:ColonyOutlines
    Select outline color:#F00000
    Load outlines from an image or objects?:Objects
    Select objects to display:EditedObjects

SaveImages:[module_num:17|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notes:["Save the outline overlay image as an 8-bit TIF, using the same name as the original image, plus '_outlines' as a suffix. Save the image to the default output folder."]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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
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    Select method for constructing file names:From image filename
    Select image name for file prefix:BSP14
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Same folder as image|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the colony objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Harrison Images
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:EditedObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
